PsychoPy2experiment version="1.75.01"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1366, 768]
  Full-screen window = True
  Experiment info = {u'participant': u''}
  expName = sample01
  Units = pix
  Screen = 1
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Routines
  Routine trial
    ImageComponent image
      stopVal [duration (s)] = 10
      units = pix
      startVal [time (s)] = 0.0
      image [set every repeat] = 'stimimage/'+$photo
      size = [650, 450]
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    GazeParserRecComponent GazeParserRec
      stopmsg = END TRIAL 
      startmsg = TRIAL 
    GazeParserMessageComponent GazeParserMessage
      units = time (s)
      text = $fixcountmsg
      time = 0
    GazeParserMessageComponent GazeParserMessage_2
      units = time (s)
      text = $'!STIMIMAGE '+$photo+' -325 325 -225 225'
      time = 0
  Routine init
    GazeParserInitComponent GazeParserInit
      datafile = $expInfo['participant']+expInfo['session']+'.csv'
      calibration = True
      trconfigfile = TrackingToolsVGA.cfg
      dummymode = False
      units = pix
      calarea = [-400,-300,400,300]
      ipaddress = 192.168.11.15
      gpconfigfile = GazeParserPP.cfg
      caltargetpos:
        [[0,0],[-350,-250],[-350,0],[-350,250],
        [0,-250],[0,0],[0,250],
        [350,-250],[350,0],[350,250]]
  Routine check
    GazeParserCheckComponent GazeParserCheck
      permerror = 48
      mousebutton = 0
      message3 = 再調整が必要です　実験者を呼んでください
      pos = [0, 0]
      message1 = 四角を見つめてスペースキーを押してください
      message2 = もう一度スペースキーを押してください
      mode = check
      key = 'space'
      units = pix
      maxtry = 3
Flow
  Routine init
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = sample01.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'photo': u'img/se_013.jpg', u'fixcountmsg': u'!FIXINREGION FACE 0 None RECT 432 574 96 230'},
      {u'photo': u'img/se_098.jpg', u'fixcountmsg': u'!FIXINREGION FACE 0 None RECT 179 398 102 247'},
      {u'photo': u'img/se_141.jpg', u'fixcountmsg': u'!FIXINREGION FACE 0 None RECT 107 255 57 182'}]
    Routine check
    Routine trial
  LoopTerminator trials
