PsychoPy2experiment version="1.75.01"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1366, 768]
  Full-screen window = False
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = sample02
  Units = use prefs
  Screen = 1
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Routines
  Routine ready
    TextComponent text_ready
      text = マウスをクリックすると始まります。
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 24
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    MouseComponent mouse
      timeRelativeTo = routine
      forceEndRoutineOnPress = True
      startVal [time (s)] = 0.0
      saveMouseState = final
  Routine trial
    GratingComponent fixation
      tex = None
      stopVal [duration (s)] = lag
      mask = circle
      units = pix
      startVal [time (s)] = 1.0
      sf = None
      size = [20, 20]
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    GratingComponent target
      tex = None
      stopVal [duration (s)] = 0.5
      mask = circle
      pos [set every repeat] = [xpos, 0]
      units = pix
      startVal [time (s)] = 1.0+lag+isi
      sf = None
      size = [20, 20]
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    GazeParserRecComponent GazeParserRec
      stopmsg = END
      startmsg = START
    GazeParserMessageComponent Msg_TargetOn
      units = time (s)
      text = $'TARGET ON '+str(isi)
      time = 1.0+lag+isi
    GazeParserMessageComponent Msg_FixOn
      units = time (s)
      text = FIX ON
      time = 1.0
    GazeParserMessageComponent Msg_lag
      units = time (s)
      text = $'LAG '+str(lag)
      time = 1.0+lag
  Routine init
    GazeParserInitComponent GazeParserInit
      datafile = $expInfo['participant']+expInfo['session']+'.csv'
      calibration = True
      trconfigfile = TrackingToolsVGA.cfg
      dummymode = True
      units = pix
      calarea = [-400,-300,400,300]
      ipaddress = 192.168.11.15
      gpconfigfile = GazeParserPP.cfg
      caltargetpos:
        [[0,0],[-350,-250],[-350,0],[-350,250],
        [0,-250],[0,0],[0,250],
        [350,-250],[350,0],[350,250]]
  Routine check
    GazeParserCheckComponent GazeParserCheck
      permerror = 48
      mousebutton = 0
      message3 = 再調整が必要です。実験者を呼んでください。
      pos = [0, 0]
      message1 = 機器の調整を確認します。中央の四角を注視してマウスの左ボタンをクリックしてください。
      message2 = 中央の四角を注視してもう一度マウスの左ボタンをクックしてください。
      mode = check
      key = 'space'
      units = pix
      maxtry = 3
  Routine thanks
    TextComponent text_thanks
      text = 実験が終了しました。ご協力ありがとうございました。
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine init
  LoopInitiator blocks loopType="TrialHandler"
    loopType = random
    nReps = 2
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    Routine check
    Routine ready
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = sample02.xlsx
      loopType = random
      nReps = 2
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      conditions:
        [{u'xpos': -400, u'lag': 1.3, u'isi': -0.2},
        {u'xpos': -400, u'lag': 1.3, u'isi': -0.1},
        {u'xpos': -400, u'lag': 1.3, u'isi': 0},
        {u'xpos': -400, u'lag': 1.3, u'isi': 0.1},
        {u'xpos': -400, u'lag': 1.3, u'isi': 0.2},
        {u'xpos': 400, u'lag': 1.3, u'isi': -0.2},
        {u'xpos': 400, u'lag': 1.3, u'isi': -0.1},
        {u'xpos': 400, u'lag': 1.3, u'isi': 0},
        {u'xpos': 400, u'lag': 1.3, u'isi': 0.1},
        {u'xpos': 400, u'lag': 1.3, u'isi': 0.2},
        {u'xpos': -400, u'lag': 1.5, u'isi': -0.2},
        {u'xpos': -400, u'lag': 1.5, u'isi': -0.1},
        {u'xpos': -400, u'lag': 1.5, u'isi': 0},
        {u'xpos': -400, u'lag': 1.5, u'isi': 0.1},
        {u'xpos': -400, u'lag': 1.5, u'isi': 0.2},
        {u'xpos': 400, u'lag': 1.5, u'isi': -0.2},
        {u'xpos': 400, u'lag': 1.5, u'isi': -0.1},
        {u'xpos': 400, u'lag': 1.5, u'isi': 0},
        {u'xpos': 400, u'lag': 1.5, u'isi': 0.1},
        {u'xpos': 400, u'lag': 1.5, u'isi': 0.2},
        {u'xpos': -400, u'lag': 1.7, u'isi': -0.2},
        {u'xpos': -400, u'lag': 1.7, u'isi': -0.1},
        {u'xpos': -400, u'lag': 1.7, u'isi': 0},
        {u'xpos': -400, u'lag': 1.7, u'isi': 0.1},
        {u'xpos': -400, u'lag': 1.7, u'isi': 0.2},
        {u'xpos': 400, u'lag': 1.7, u'isi': -0.2},
        {u'xpos': 400, u'lag': 1.7, u'isi': -0.1},
        {u'xpos': 400, u'lag': 1.7, u'isi': 0},
        {u'xpos': 400, u'lag': 1.7, u'isi': 0.1},
        {u'xpos': 400, u'lag': 1.7, u'isi': 0.2}]
      Routine trial
    LoopTerminator trials
  LoopTerminator blocks
  Routine thanks
