PsychoPy2experiment version="1.76.00"
Settings
  Monitor = testMonitor
  Window size (pixels) = [1920, 1200]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u'', u'gaze datafile': u'data.csv', u'gazetracker address': u''}
  expName = GazeParserSample
  Units = use prefs
  Screen = 1
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Routines
  Routine trial
    GazeParserRecComponent GazeParserRec
      msglist = [[1.0,'a'],[2.0,'b'],[3.0,'c'],[4.0,'d']]
      units = time (s)
      stopmsg = routine end
      startmsg = routine start
    GratingComponent grating
      stopVal [duration (s)] = 5
      mask = gauss
      pos [set every frame] = [0.3*cos(trialClock.getTime()), 0.3*sin(trialClock.getTime())]
      startVal [time (s)] = 0.0
      sf = None
      size = [0.05, 0.05]
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    TextComponent text
      text [set every frame] = $frameN
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine init
    GazeParserInitComponent GazeParserInit
      datafile = $expInfo['gaze datafile']
      trconfigfile = $expInfo['gazetracker address']
      dummymode = False
      units = pix
      calarea = [-400,-300,400,300]
      ipaddress = 192.168.11.3
      caltargetpos:
        [[0,0],[-350,-250],[-350,0],[-350,250],
        [0,-250],[0,0],[0,250],
        [350,-250],[350,0],[350,250]]
  Routine check
    GazeParserCheckComponent GazeParserCheck
      torelance = 256
      mousebutton = 0
      key = 'space'
      units = pix
      maxtry = 3
Flow
  Routine init
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = random
    nReps = 3
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    Routine check
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 3
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      Routine trial
    LoopTerminator trials
  LoopTerminator trials_2
