PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1024, 768]
  Full-screen window = False
  Experiment info = {u'session': u'001', u'participant': u'participant01', u'tracker address': u'localhost', u'dummy mode': u'False'}
  expName = GPComponentDemo01
  Units = norm
  Screen = 1
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Routines
  Routine ready
    GazeParserCheckComponent GazeParserCheck
      permerror = 0.1
      pos = [0, 0]
      units = from exp settings
      mousebutton = 0
      key = 'space'
      maxtry = 3
      mode = check
  Routine trial
    GazeParserRecComponent GazeParserRec
      stopmsg = End
      startmsg [set every repeat] = $'Trial %d' % (trials.thisN+1)
    GazeParserGetPosComponent CurrentGazePos
      ma = 3
      units = from exp settings
      filler = -10000
      binocular = Average
    GazeParserMessageComponent Message1
      text = Message1 (5sec)
      timeType = time (s)
      time = 5
    GazeParserMessageComponent Message2
      text = message2 (frame 100)
      timeType = frame N
      time = 100
    GratingComponent grating
      tex = sin
      stopVal [duration (s)] = 10
      mask = gauss
      pos [set every frame] = CurrentGazePos
      phase [set every frame] = 2*t
      startVal [time (s)] = 0.0
      sf [set every repeat] = trials.thisN+1
      size = [0.5, 0.5]
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  Routine init
    GazeParserInitComponent GazeParserInit
      calarea = [-1.0,-1.0,1.0,1.0]
      useMonitorInfo = True
      calibration = True
      units = from exp settings
      fitImageBuffer = True
      ipaddress = $expInfo['tracker address']
      modevar = $expInfo['dummy mode']
      datafile = $expInfo['participant']+'.csv'
      mode = Follow the variable
      caltargetpos:
        [[0.0,0.0],[-0.8,-0.8],[-0.8,0.0],[-0.8,0.8],
        [0.0,-0.8],[0.0,0.0],[0.0,0.8],
        [0.8,-0.8],[0.8,0.0],[0.8,0.8]]
Flow
  Routine init
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine ready
    Routine trial
  LoopTerminator trials
